CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:CY5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RFP")
    Name to assign these images:RFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:CY5
    Name the output image:IllumCY5
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:GFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:RFP
    Name the output image:IllumRFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumCY5
    Select method for constructing file names:Single name
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    Enter single file name:IllumCY5_cor_2
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    Saved file format:npy
    Output file location:Default Output Folder|Interstellar_Project/2.wave3_data/2.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
    Select method for constructing file names:Single name
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    Enter single file name:IllumDAPI_cor_2
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    Saved file format:npy
    Output file location:Default Output Folder|Interstellar_Project/2.wave3_data/2.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumGFP
    Select method for constructing file names:Single name
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    Enter single file name:IllumGFP_cor_2
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    Saved file format:npy
    Output file location:Default Output Folder|Interstellar_Project/2.wave3_data/2.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumRFP
    Select method for constructing file names:Single name
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    Enter single file name:IllumRFP_corr_2
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    Saved file format:npy
    Output file location:Default Output Folder|Interstellar_Project/2.wave3_data/2.cellprofiler_ic_processing/illum_directory
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
